macro "Rotate Immuno Images" {
	function deleteDirectory(dir) {
		del_list = getFileList(dir);
		for (i=0; i<del_list.length; i++) {
			File.delete(dir + del_list[i]);
		}
		File.delete(dir);
	}
	
	orig_dir = File.getDefaultDir;
	
	change_default_dir = getBoolean(
		"Would you like to change the default directory for easier "+
		"access to working files? This will only persist until FIJI is closed."
		);
		
	if (change_default_dir) {
		def_dir = getDir("Choose a new default directory");
		File.setDefaultDir(def_dir);
		print(def_dir);
	}
	
	main_dir = getDir("Choose Main Directory Containing the Image Folder");
	im_dir = getDir("Choose Folder Containing Images to be Processed");
	file_list = getFileList(im_dir);
	ims_in_dir = 0;
	
	for (i=0; i<file_list.length; i++) {
		if (endsWith(file_list[i], ".jpg")|endsWith(file_list[i], ".tif")) {
			ims_in_dir += 1;
		}
	}
	
	im_list = newArray(ims_in_dir);
	im_index = 0;
	for (i=0; i<file_list.length; i++) {
		if (endsWith(file_list[i], ".jpg")|endsWith(file_list[i], ".tif")) {
			im_list[im_index] = file_list[i];
			im_index += 1;
		}
		else {
			continue;
		}
	}

	print(im_list[0]);
	num_ims = lengthOf(im_list);
	
	temp_dir = im_dir + "temp_ims" + File.separator;
	if (!File.exists(temp_dir)) {
	    File.makeDirectory(temp_dir);
	}
	
	rot_dir = im_dir + "processed_imgs" + File.separator;
	if (!File.exists(rot_dir)) {
	    File.makeDirectory(rot_dir);
	}

	crop_xs = newArray(num_ims);
	crop_ys = newArray(num_ims);
	crop_Hs = newArray(num_ims);
	crop_Ws = newArray(num_ims);
	angles = newArray(num_ims);
	orig_names = newArray(num_ims);
	
	// This assumes the scale bar is either in the top right or bottom left
	img_scales = File.open(im_dir+"Img_Scales.txt");
	
	for (im=0; im<num_ims; im++) {
		open(im_dir + im_list[im]);
		orig = getTitle();
		orig_names[im] = orig;
		
		setForegroundColor(0, 0, 0);
		
		run("Set Scale...", "distance=0 known=0 pixel=1 unit=pixel");
		
		run("Select None");
		
		setColor(0, 0, 0);
		floodFill(5, 0, "8-connected");
		floodFill(5, Image.height, "8-connected");
		
		corner1x = 0;
		corner1y = Image.height - 40;
		corner1w = 220;
		corner1h = 40;
		
		corner2x = Image.width - 220;
		corner2y = 0;
		corner2w = 220;
		corner2h = 40;
		
//		bl_x = newArray(corner1w - corner1x + 1);
//		bl_y = newArray(Image.height - corner1y + 1);
//		avg_bl_x = 0;
//		best_bl_x = newArray(corner1w - corner1x + 1);
//		best_bl_y = 0;
//		tr_x = newArray(Image.width - corner2x + 1);
//		tr_y = newArray(corner2h + 1);
//		avg_tr_x = 0;
//		best_tr_x = newArray(Image.width - corner2x + 1);
//		best_tr_y = 0;
//		
//		for (y=corner1y; y<Image.height; y++) {
//			for (x=0; x<lengthOf(bl_x); x++) {
//				pix = getPixel(x, y);
//				red = (pix>>16)&0xff;
//				blue = (pix>>8)&0xff;
//				green = pix&0xff;
//				if ((red == 255)&(blue == 255)&(green == 255)) {
//					bl_x[x] = 1;
//				}
//				else {
//					bl_x[x] = 0;
//				}
//			}
//			Array.print(bl_x);
//			Array.getStatistics(bl_x, min, max, mean, stdDev);
//			if (max == 0) {
//				continue;
//			}
//			else {
//				new_avg_bl_x = mean;
////				print("mean: "+mean);
//				if (new_avg_bl_x > avg_bl_x) {
//					avg_bl_x = new_avg_bl_x;
//					best_bl_y = y;
//					best_bl_x = bl_x;
//				}
//			}
//		}
//		
//		best_bl_x = Array.deleteValue(best_bl_x, 0);
//		len_bl_x = lengthOf(best_bl_x);
//		
//		for (y=0; y<lengthOf(tr_y); y++) {
//			for (x=corner2x; x<Image.width; x++) {
//				pix = getPixel(x, y);
//				red = (pix>>16)&0xff;
//				blue = (pix>>8)&0xff;
//				green = pix&0xff;
//				if ((red == 255)&(blue == 255)&(green == 255)) {
//					tr_x[x] = 1;
//				}
//				else {
//					tr_x[x] = 0;
//				}
//			}
//			Array.getStatistics(tr_x, min, max, mean, stdDev);
//			if (max == 0) {
//				continue;
//			}
//			else {
//				new_avg_tr_x = mean;
//				print(new_avg_tr_x);
//				if (new_avg_tr_x > avg_tr_x) {
//					avg_tr_x = new_avg_tr_x;
//					best_tr_y = y;
//					best_tr_x = tr_x;
//				}
//			}
//		}
//		
//		best_tr_x = Array.deleteValue(best_tr_x, 0);
//		len_tr_x = lengthOf(best_tr_x);
//		print(len_bl_x);
//		print(len_tr_x);
//		scale_bar_pix = maxOf(len_bl_x, len_tr_x);
//		
//		print(img_scales, scale_bar_pix);
		
		fillRect(corner1x, corner1y, corner1w, corner1h);
		fillRect(corner2x, corner2y, corner2w, corner2h);
		
		origW = getWidth();
		origH = getHeight();
		origDiag = Math.sqrt(pow(origW, 2) + pow(origH, 2));
		run("Canvas Size...", "width=origDiag height=origDiag");
		floodFill(5, 5, "8-connected");
//		floodFill((Image.width-5), 5, "8-connected");
		diagW = getWidth();
		diagH = getHeight();
		
		run("Duplicate...", "title=thresh");
		
		selectWindow(orig);
		file_name_split = split(orig, ".");
		file_name_noex = file_name_split[0];
		file_ex_dot = replace(orig, file_name_noex, "");
		new_file_name = file_name_noex+"_temp"+file_ex_dot;
		save(temp_dir + File.separator + new_file_name);
		close(orig);
		
		newW = diagW*0.25;
		newH = diagH*0.25;
		run("Select None");
		run("Size...", "width=newW height=newH average=true interpolation=Bilinear");
		
		run("8-bit");
		run("Auto Threshold", "method=MinError(I) ignore_black white");
		setThreshold(128, 255);
		run("Convert to Mask");
		run("Fill Holes");
		
		run("Set Measurements...", "fit redirect=None decimal=3");
		run("Analyze Particles...", "size=1000-Infinity pixel display clear");
		print(nResults());
		el_major = 0;
		final_i = 0;
		i = 0;
		while (i < nResults()) {
			if ((88 < getResult("Angle", i))&&(getResult("Angle", i) < 92)) {
				i += 1;
			}
//			if (getResult("Minor", i) > (Image.height/3))
//				i += 1
			else if (getResult("Major", i) > el_major) {
				el_major = getResult("Major", i);
				final_i = i;
				i += 1;
			}
			else {
				i += 1;
			}
		}
		angle = getResult("Angle", final_i);
		print(angle);
		angle_fixed = (-1)*(180 - angle);
		angles[im] = angle_fixed;
		print(angle_fixed);
		run("Rotate...", "angle="+(angle_fixed)+" grid=1 interpolation=Bilinear");
		
		run("Convert to Mask");
		run("Set Measurements...", "bounding redirect=None decimal=3");
		run("Analyze Particles...", "size=5000-Infinity pixel display clear");
		
		j = 0;
		final_j = 0;
		area_sum = 0;
		height = 0;
		width = 0;
		while (j < nResults()) {
			if ((getResult("BX", j)==0)|((getResult("BY", j)+getResult("Height", j))==Image.height))
				j += 1;
			else if ((getResult("Width", j))+(getResult("Height", j)) > area_sum) {
				area_sum = (getResult("Width", j))+(getResult("Height", j));
				width = getResult("Width", j);
				height = getResult("Height", j);
				final_j = j;
				j += 1;
			}
			else {
				j += 1;
			}
		}
		
		BX = getResult("BX", final_j);
		BY = getResult("BY", final_j);
		cropBX = (BX*4) - 50;
		crop_xs[im] = cropBX;
		cropBY = (BY*4) - 50;
		crop_ys[im] = cropBY;
		cropW = (width*4) + 100;
		crop_Ws[im] = cropW;
		cropH = (height*4) + 100;
		crop_Hs[im] = cropH;
		
		close("*");
	}
	
	Array.getStatistics(crop_Hs, min, max, mean, stdDev);
	max_H = max;
	print(max_H);
	
	temp_ims_in_dir = 0;
	temp_file_list = getFileList(temp_dir);
	for (i=0; i<temp_file_list.length; i++) {
		if (endsWith(temp_file_list[i], ".jpg")|endsWith(temp_file_list[i], ".tif")) {
			temp_ims_in_dir += 1;
		}
	}
	
	temp_im_list = newArray(temp_ims_in_dir);
	temp_im_index = 0;
	for (i=0; i<temp_file_list.length; i++) {
		if (endsWith(temp_file_list[i], ".jpg")|endsWith(temp_file_list[i], ".tif")) {
			temp_im_list[temp_im_index] = temp_file_list[i];
			temp_im_index += 1;
		}
		else {
			continue;
		}
	}
	
	print(temp_im_list[0]);
	num_ims = lengthOf(temp_im_list);
	
	for (im=0; im<num_ims; im++) {
		for (H=0; H<num_ims; H++) {
			if (crop_Hs[H] < max_H) {
				H_diff = max_H - crop_Hs[H];
				half_diff = H_diff / 2;
				old_y = crop_ys[H];
				new_y = old_y - half_diff;
				crop_ys[H] = new_y;
				old_H = crop_Hs[H];
				new_H = old_H + H_diff;
				crop_Hs[H] = new_H;
			}
			else {
				continue;
			}
		}
		
		open(temp_dir + File.separator + temp_im_list[im]);
		temp = getTitle();
		run("Set Scale...", "distance=0 known=0 pixel=1 unit=pixel");
		
		run("Rotate...", "angle="+(angles[im])+" grid=1 interpolation=Bilinear");
		makeRectangle(crop_xs[im], crop_ys[im], crop_Ws[im], crop_Hs[im]);
		run("Crop");
		
		newIM = getTitle();
		origH = Image.height;
		origW = Image.width;
		
		run("Duplicate...", "title=flipper");
		newW = origW*0.05;
		newH = origH*0.05;
		run("Select None");
		run("Size...", "width=newW height=newH average=true interpolation=Bilinear");
		
		halfH = newH / 2;
		
		sumR1 = 0;
		sumG1 = 0;
		sumB1 = 0;
		count = 0;
		for (i = 5; i < newW; i++) {
			    for (j = 5; j < halfH; j++) {
			        pix = getPixel(i, j);
			        r = (pix>>16)&0xff;  // extract red byte (bits 23-17)
				    g = (pix>>8)&0xff; // extract green byte (bits 15-8)
				    b = pix&0xff;
			        sumR1 += r;
			        sumG1 += g;
			        sumB1 += b;
			        count++;
			   	}
			}
		avgR1 = sumR1 / count;
		avgG1 = sumG1 / count;
		avgB1 = sumB1 / count;
		
		sumR2 = 0;
		sumG2 = 0;
		sumB2 = 0;
		count = 0;
		for (i = 5; i < newW; i++) {
			    for (j = halfH; j < newH; j++) {
			        pix = getPixel(i, j);
			        r = (pix>>16)&0xff;  // extract red byte (bits 23-17)
				    g = (pix>>8)&0xff; // extract green byte (bits 15-8)
				    b = pix&0xff;
			        sumR2 += r;
			        sumG2 += g;
			        sumB2 += b;
			        count++;
			   	}
			}
		avgR2 = sumR2 / count;
		avgG2 = sumG2 / count;
		avgB2 = sumB2 / count;
			
		color1 = Math.sqrt(pow(avgR1, 2) + pow(avgG1, 2) + pow(avgB1, 2));
		color2 = Math.sqrt(pow(avgR2, 2) + pow(avgG2, 2) + pow(avgB2, 2));
		
		selectWindow(newIM);
		
		if (color2 > color1) {
			run("Flip Vertically");
		}
		
//		if (add_labels) {
//			setColor("white");
//			setJustification("left");
//			setFont("Monospaced", 250, "non-antialiased bold");
//			stringW = getStringWidth(im_tags[im]);
//			print(stringW);
//			text_x = (Image.width / 2) - (stringW / 2);
//			print(text_x);
//			stringH = getValue("font.height");
//			text_y = stringH + 10;
//			drawString(im_tags[im], text_x, text_y, "black");
//		}
		
		orig = orig_names[im];
		file_name_split = split(orig, ".");
		file_name_noex = file_name_split[0];
		file_ex_dot = replace(orig, file_name_noex, "");
		new_file_name = file_name_noex+"_rotated"+file_ex_dot;
		save(rot_dir + File.separator + new_file_name);
		close("*");
	}
	deleteDirectory(temp_dir);
	File.setDefaultDir(orig_dir);
	exit("Saved new images");
}
